CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:SingleWorms
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Single image location:file:///C:/Users/MolDev/Desktop/CP_file_structure/Cellprofiler/well_masks/wellmask_98.png   
    Name to assign this image:WellMask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:SingleWorms
    Name the output image:BinarySelectedWorms
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
UntangleWorms:[module_num:6|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
    Select the input binary image:BinarySelectedWorms
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Default Output Folder|
    Training set file name:L2L3_N2_HB101_H17_H36.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:No
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Train
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400
