CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:403
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|metadata
    Name of the file:<your_.csv_metadata_file>
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

ImageMath:[module_num:2|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRAW
    Image or measurement?:Image
    Select the first image:RawBF
    Multiply the first image by:1
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    Image or measurement?:Image
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
MaskImage:[module_num:3|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
    Select the input image:InvertedRAW
    Name the output image:MaskedRaw
    Use objects or an image as a mask?:Image
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    Select image for mask:wellmask_98.png
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:MaskedRaw
    Name the primary objects to be identified:Welloutline
    Typical diameter of objects, in pixel units (Min,Max):800,2048
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:MaskedRaw
    Name the output image:IllumGrey2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:100
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:MaskedRaw
    Name the output image:CorrGrey2
    Select the illumination function:IllumGrey2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrGrey2
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:WormObjects
    Name the output image:WormBinary
    Select the color format:Binary (black & white)
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
UntangleWorms:[module_num:9|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
    Select the input binary image:WormBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms_L4_N2_HB101_100w
    Name the output non-overlapping worm objects:NonOverlappingWorms_L4_N2_HB101_100w
    Training set file location:Elsewhere...|/projects/b1059/projects/<your_project_folder>/CellProfiler/worm_models
    Training set file name:L4_N2_HB101_100w.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:No
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:Medium
    Custom complexity:400

UntangleWorms:[module_num:10|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
    Select the input binary image:WormBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms_L2L3_N2_HB101_100w
    Name the output non-overlapping worm objects:NonOverlappingWorms_L2L3_N2_HB101_100w
    Training set file location:Elsewhere...|/projects/b1059/projects/<your_project_folder>/CellProfiler/worm_models
    Training set file name:L2L3_N2_HB101_100w.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:No
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:Medium
    Custom complexity:400

UntangleWorms:[module_num:11|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
    Select the input binary image:WormBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms_L1_N2_HB101_100w
    Name the output non-overlapping worm objects:NonOverlappingWorms_L1_N2_HB101_100w
    Training set file location:Elsewhere...|/projects/b1059/projects/<your_project_folder>/CellProfiler/worm_models
    Training set file name:L1_N2_HB101_100w.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:No
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:Medium
    Custom complexity:400

UntangleWorms:[module_num:12|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
    Select the input binary image:WormBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms_MDHD
    Name the output non-overlapping worm objects:NonOverlappingWorms_MDHD
    Training set file location:Elsewhere...|/projects/b1059/projects/<your_project_folder>/CellProfiler/worm_models
    Training set file name:MDHD.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:No
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:Medium
    Custom complexity:400

RescaleIntensity:[module_num:13|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
    Select the input image:RawBF
    Name the output image:rescaledRawBF
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rescaledRawBF
    Name the output image:rescaled_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#1AC5F7
    Select objects to display:OverlappingWorms_L4_N2_HB101_100w
    Select outline color:#F40006
    Select objects to display:OverlappingWorms_L2L3_N2_HB101_100w
    Select outline color:#22FF0C
    Select objects to display:OverlappingWorms_L1_N2_HB101_100w
    Select outline color:yellow
    Select objects to display:OverlappingWorms_MDHD
    Select outline color:#FB00FC
    Select objects to display:Welloutline
    Select outline color:Black
    Select objects to display:WormObjects

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:rescaled_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawBF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images/processed_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:16|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
    Select images to measure:RawBF
    Select objects to measure:NonOverlappingWorms_L4_N2_HB101_100w, NonOverlappingWorms_L2L3_N2_HB101_100w, NonOverlappingWorms_L1_N2_HB101_100w, NonOverlappingWorms_MDHD

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:NonOverlappingWorms_L4_N2_HB101_100w, NonOverlappingWorms_L2L3_N2_HB101_100w, NonOverlappingWorms_L1_N2_HB101_100w, NonOverlappingWorms_MDHD
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:18|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
    Parent objects:WormObjects
    Child objects:NonOverlappingWorms_L4_N2_HB101_100w
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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
    Parent objects:WormObjects
    Child objects:NonOverlappingWorms_L2L3_N2_HB101_100w
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:20|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
    Parent objects:WormObjects
    Child objects:NonOverlappingWorms_L1_N2_HB101_100w
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:21|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
    Parent objects:WormObjects
    Child objects:NonOverlappingWorms_MDHD
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|output_data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:23|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
    Store batch files in default output folder?:No
    Output folder path:/Users/<your_user_name>/CellProfiler
    Are the cluster computers running Windows?:No
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    Local root path:/Users/<your_user_name>
    Cluster root path:/projects/b1059/projects/<your_project_folder>
